Source:Signal%20Properties:DataIOFilter int SourceCh= 128 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 128 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 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0.0715 0.003 % % // gain for each channel (A/D units -> muV)
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 128 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Source:TMSiADC:TMSiADC intlist PhysicalChannels= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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128 1 1 % // hardware indices of channels to record
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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125 126 127 128 // list of transmitted channels
