Source:Signal%20Properties:DataIOFilter int SourceCh= 128 16 1 % // number of digitized and stored channels
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Source:Signal%20Properties:DataIOFilter int SamplingRate= 256Hz 256Hz 1 % // sample rate
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 128 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 0.0715 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0.0715 0.003 % % // gain for each channel (A/D units -> muV)
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 128 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 % % // Offset for channels in A/D units
Source:Signal%20Properties:DataIOFilter list ChannelNames= 128 fp1 fpz fp2 f7 f3 fz f4 f8 fc5 fc1 fc2 fc6 m1 t7 c3 cz c4 t8 m2 cp5 cp1 cp2 cp6 p7 p3 pz p4 p8 poz o1 oz o2 af7 af3 af4 af8 f5 f1 f2 f6 fc3 fcz fc4 c5 c1 c2 c6 cp3 cpz cp4 p5 p1 p2 p6 po5 po3 po4 po6 ft7 ft8 tp7 tp8 po7 po8 ft9 ft10 tpp9 tpp0 po9 po10 p9 p10 aff1 afz aff2 ffc5 ffc3 ffc4 ffc6 fcc5 fcc3 fcc4 fcc6 ccp5 ccp3 ccp4 ccp6 cpp5 cpp3 cpp4 cpp6 ppo1 ppo2 i1 iz i2 afp3 afp4 aff5 aff6 fft7 ffc1 ffc2 fft8 ftt9 ftt7 fcc1 fcc2 ftt8 ftt0 ttp7 ccp1 ccp2 ttp8 tpp7 cpp1 cpp2 tpp8 ppo9 ppo5 ppo6 ppo0 poo9 poo3 poo4 poo0 oi1 oi2 // list of channel names
Source:TMSiADC:TMSiADC intlist PhysicalChannels= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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128 1 1 % // hardware indices of channels to record
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 128 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 29 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125 126 127 128 // list of transmitted channels
