Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // list of output channels for the CAR if used
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= { fp1_lap fpz_lap fp2_lap f7_lap f3_lap fz_lap f4_lap f8_lap fc5_lap fc1_lap fc2_lap fc6_lap m1_lap t7_lap c3_lap cz_lap c4_lap t8_lap m2_lap cp5_lap cp1_lap cp2_lap cp6_lap p7_lap p3_lap pz_lap p4_lap p8_lap poz_lap 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0 0 % % // columns represent input channels, rows represent output channels
Filtering:ARFilter int WindowLength= 0.5s 0.5s % % // Time window for spectrum computation
Filtering:ARFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:ARFilter int ModelOrder= 16 16 0 % // AR model order
Filtering:ARFilter int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: AR Coefficients (enumeration)
Filtering:ARFilter float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (as a fraction of sampling rate or in Hz)
Filtering:ARFilter float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (as a fraction of sampling rate or in Hz)
Filtering:ARFilter float BinWidth= 3Hz 3Hz % % // Width of spectral bins (as a fraction of sampling rate or in Hz)
Filtering:ARFilter int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Filtering:Normalizer floatlist NormalizerGains= 2 1 1 0 % % // normalizer gain values
Filtering:Normalizer intlist Adaptation= 2 2 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Filtering:Normalizer matrix BufferConditions= 2 1 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Filtering:Normalizer float BufferLength= 9s 9s % % // time window of past data per buffer that enters into statistic
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
